---
API: 3
OpenSesame: 4.0.5
Platform: nt
---
set width 1024
set title experiment
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set jatos_uuid "a009e998-ed04-be2a-65dd-e45bafc4e9aa"
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\y24cr\\Documents\\Study Abroad\\Classes\\Experimental Psycholinguistics\\exam_ExPsylin"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set background "#3d3846"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run practice_intro1 True
	run practice_intro2 True
	run practice_loop True
	run experiment_introduction True
	run experiment_loop True
	run experiment_end True

define sketchpad experiment_end
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="The experiment finished!<br />Thanks a lot for your participation!<br /><br />Please send a json file you got after finishing<br />to the person who asked you to participate in this study." x=-480 y=-160 z_index=0

define form_text_input experiment_filling_out
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title practice_filling
	__form_question__
	fill out what you heard just before.
	if you finish, please push the enter.
	__end__
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="{form_title}"
	widget 0 1 1 1 label center=no text="{form_question}"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="{form_var}"


define sketchpad experiment_interval_after
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="A sound is being played......" x=0 y=0 z_index=0

define sketchpad experiment_interval_before
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="A sound is being played......" x=0 y=0 z_index=0

define sketchpad experiment_introduction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="The practice part finished!<br />You're now ready to begin the experiment.<br /><br />Hear the sound, and fill what you hear out.<br />Some sounds are clear, and others are with noise.<br /><br />Press 'enter' to go." x=-478.0 y=-171.0 z_index=0

define loop experiment_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 32
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 sound 17
	setcycle 1 sound 18
	setcycle 2 sound 19
	setcycle 3 sound 20
	setcycle 4 sound 21
	setcycle 5 sound 22
	setcycle 6 sound 23
	setcycle 7 sound 24
	setcycle 8 sound 25
	setcycle 9 sound 26
	setcycle 10 sound 27
	setcycle 11 sound 28
	setcycle 12 sound 29
	setcycle 13 sound 30
	setcycle 14 sound 31
	setcycle 15 sound 32
	setcycle 16 sound "n-1"
	setcycle 17 sound "n-2"
	setcycle 18 sound "n-3"
	setcycle 19 sound "n-4"
	setcycle 20 sound "n-5"
	setcycle 21 sound "n-6"
	setcycle 22 sound "n-7"
	setcycle 23 sound "n-8"
	setcycle 24 sound "n-9"
	setcycle 25 sound "n-10"
	setcycle 26 sound "n-11"
	setcycle 27 sound "n-12"
	setcycle 28 sound "n-13"
	setcycle 29 sound "n-14"
	setcycle 30 sound "n-15"
	setcycle 31 sound "n-16"
	run experiment_sequence

define sequence experiment_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run experiment_statement True
	run experiment_interval_before True
	run experiment_sound True
	run experiment_interval_after True
	run experiment_filling_out True
	run experimet_logger True

define sampler experiment_sound
	set volume 1
	set stop_after 0
	set sample "[sound].mp3"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad experiment_statement
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="The sound will be played soon." x=0 y=0 z_index=0

define logger experimet_logger
	set description "Logs experimental data"
	set auto_log yes

define form_text_input practice_filling_out
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title practice_filling
	__form_question__
	fill out what you heard just before.
	if you finish, please push the enter.
	__end__
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="{form_title}"
	widget 0 1 1 1 label center=no text="{form_question}"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="{form_var}"


define sketchpad practice_interval_after
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="A sound is being played......" x=0 y=0 z_index=0

define sketchpad practice_interval_before
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="A sound is being played......" x=0 y=0 z_index=0

define sketchpad practice_intro1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="Please sit down in a silent place,<br />and prepare your earphone or headphone.<br /><br />If you are ready, please push 'enter'." x=-486.0 y=-112.0 z_index=0

define sketchpad practice_intro2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="You will hear a series of sound.<br />Please wirte down what you heard after a sound.<br />Some are clear, and others are with noise.<br /><br />First, there is a practice session.<br />After practice, the main session will start.<br /><br />If ready, please put 'enter' key. " x=-488.0 y=-154.0 z_index=0

define logger practice_logger
	set description "Logs experimental data"
	set auto_log yes

define loop practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 sound 1
	setcycle 1 sound 2
	setcycle 2 sound "n-17"
	setcycle 3 sound "n-18"
	run practice_sequence

define sequence practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run practice_statement True
	run practice_interval_before True
	run practice_sound True
	run practice_interval_after True
	run practice_filling_out True
	run practice_logger True

define sampler practice_sound
	set volume 1
	set stop_after 0
	set sample "[sound].mp3"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad practice_statement
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=35 html=yes show_if=True text="The sound will be played soon" x=0 y=0 z_index=0

